e=2
pcabar=4
d=8
c=3
b=2
a=1
retrel=0.3
relret=0.1


load_file("nrngui.hoc")


//----------------------------------------------------------------------------
// retinal axon
//----------------------------------------------------------------------------
create retinal_axon
//tc200_cc.oc
retinal_axon {
	insert pas
	g_pas = 3.79e-5
	e_pas = -76.5		// to fit current-clamp data (was -71 to -73)
	cm = 0.88
	Ra = 173

	insert hh2		// insert fast spikes
	ena = 50
	ek = -100
	vtraub_hh2 = -52
	gnabar_hh2 = 0.01		// adapted to single-compartment
	gkbar_hh2 = 0.01 		// adapted to single-compartment

	insert itGHK		// T-current everywhere
	cai = 2.4e-4 
	cao = 2 
	eca = 120 
	shift_itGHK = -1	// screening charge shift + 3 mV error
	gcabar_itGHK = 0.0002
	pcabar_itGHK = 8e-5
	qm_itGHK = 2.5
	qh_itGHK = 2.5
	
	insert cad		// calcium diffusion everywhere
	depth_cad = 0.1
	kt_cad = 0		// no pump
	kd_cad = 1e-4
	taur_cad = 5
	cainf_cad = 2.4e-4	
}

//----------------------------------------------------------------------------
// relay cell topology
//----------------------------------------------------------------------------
xopen("cells/tc200.geo") // read geometry file
xopen("loc200.oc") // load procedures for localizing T-current

corrD = 1 // no dendritic surface correction
G_pas = 3.79e-5
E_pas = -73 // to fit current-clamp data (was -71 to -73)
E_pas = -76.5 // within 3 mV error

forall { // insert passive current everywhere
insert pas
g_pas = G_pas * corrD
e_pas = E_pas
cm = 0.88 * corrD
Ra = 173
L = L
}

soma {
g_pas = G_pas
cm = 0.88

insert hh2 // insert fast spikes
ena = 50
ek = -100
vtraub_hh2 = -52
gnabar_hh2 = 0.1
gkbar_hh2 = 0.1
}


forall {
insert itGHK // T-current everywhere
cai = 2.4e-4
cao = 2
eca = 120
shift_itGHK = -1 // screening charge shift + 3 mV error
gcabar_itGHK = corrD * 0.0002
qm_itGHK = 2.5
qh_itGHK = 2.5

insert cad // calcium diffusion everywhere
depth_cad = 0.1 * corrD
kt_cad = 0 // no pump
kd_cad = 1e-4
taur_cad = 5
cainf_cad = 2.4e-4
}

// uniform T-current with same density as in dissociated cells
// localize(1.7e-5,corrD*1.7e-5,corrD*1.7e-5)

// low density proximal, high distal, to match volt-clamp of intact cells
localize(1.7e-5,corrD*8.5e-5,corrD*8.5e-5)


objectvar rstim // insert current injection

retinal_axon rstim = new IClamp(.5)
rstim.del = 0
rstim.dur = 1e9 // dur has to be infinite when used with vector playing 
rstim.amp = 0

objref fspikes, vecspikes, vecstim
fspikes=new File()
fspikes.ropen("contrast/cs3_01.dat")
vecspikes=new Vector()
vecstim = new Vector(4000,0)
vecspikes.scanf(fspikes)
for total=0, vecspikes.size()-1{
    vecstim.x( int(vecspikes.x(total)*1000) ) = 4000
}
vecspikes.printf()
vecstim.play( &rstim.amp, 1 )


// Definition of the list of NetCon objects representing synapses to the retinal axon
objectvar syn2retinal_axon
syn2retinal_axon = new List()

//----------------------------------------------------------------------------
// retina -> relay AMPA 
//----------------------------------------------------------------------------

objectvar syn // won't be any different if using objref
dend4[0] syn = new AMPA(0.5)

Prethresh_AMPA = 0 // (mV) voltage level nec for release
retinal_axon syn2retinal_axon.append( new NetCon(&v(0.5), syn, Prethresh_AMPA, 0, 0.2) )




//----------------------------------------------------------------------------
// interneuron
//----------------------------------------------------------------------------
load_file("INmodel.hoc")





//----------------------------------------------------------------------------
// reticular
//----------------------------------------------------------------------------
load_file("reticular.hoc")


//////////////////////////////////////////////////////////////////////////////
// reticular -> relay GABA
//////////////////////////////////////////////////////////////////////////////
objectvar synretrel
synretrel = new List()

objectvar syndis
//dend6[6] syndis = new GABAa(0.5)
//dend_re1[12] synretrel.append (new NetCon(&dend_re1[12].v(0.5), syndis, 0, 2, 0.2))

dend9[22] syndis = new GABAa(0.5)
dend_re2[4] synretrel.append (new NetCon(&dend_re2[4].v(0.5), syndis, 0, 2, retrel))


//////////////////////////////////////////////////////////////////////////////
// relay -> reticular 
//////////////////////////////////////////////////////////////////////////////
objectvar synretrelinv
synretrelinv = new List()

objectvar syndisinv


dend_re2[4] syndisinv = new GABAa(0.5) //2[4] proximal, 34.5466
dend9[22] synretrel.append (new NetCon(&dend9[22].v(0.5), syndisinv, 0, 2, relret))






//----------------------------------------------------------------------------
// inter -> relay GABA_A //now the data on weight is needed
//----------------------------------------------------------------------------

objectvar syn2interneuron
syn2interneuron = new List()

objectvar synj
dend4[0] synj=new GABAa(0.5) //relay GABA_A
dend[32] syn2interneuron.append( new NetCon(&dend[32].v(0.5), synj, -50, 2, 0.18) )

//32, 87

//----------------------------------------------------------------------------
// retina -> inter AMPA 
//----------------------------------------------------------------------------

objectvar syni // won't be any different if using objref
dend[32] syni = new AMPA(0.5)

Prethresh_AMPA = 0 // (mV) voltage level nec for release

retinal_axon syn2retinal_axon.append( new NetCon(&v(0.5), syni, Prethresh_AMPA, 0, 0.17) )

//----------------------------------------------------------------------------
// transient time
//----------------------------------------------------------------------------
trans = 00

print " "
print ">> Transient time of ",trans," ms"
print " "

//----------------------------------------------------------------------------
// setup simulation parameters
//----------------------------------------------------------------------------
Dt = 0.2
npoints = 12500

dt = 0.1			// must be submultiple of Dt
tstart = trans
tstop = trans + npoints * Dt
runStopAt = tstop
steps_per_ms = 1/Dt

celsius = 34			// temperature of John's experiments

v_init = -74			// approximate resting Vm

//----------------------------------------------------------------------------
// adding graph(s): http://senselab.med.yale.edu/ModelDB/ShowModel.asp?model=18198&file=\SYN_NEW\gabab3.hoc
//----------------------------------------------------------------------------
objectvar g[20]         // max 20 graphs
ngraph = 0

proc addgraph() { local ii  // define subroutine to add a new graph
                // addgraph("variable", minvalue, maxvalue)
    ngraph = ngraph+1
    ii = ngraph-1
    g[ii] = new Graph()
    g[ii].size(0,tstop,$2,$3)
    g[ii].xaxis()
    g[ii].yaxis()
    g[ii].addvar($s1,1,0)
    g[ii].save_name("graphList[0].")
    graphList[0].append(g[ii])
}

addgraph("v(0.5)",-80,40)
g.addvar("soma_inter.v(0.5)", 2, 0.1) //red
g.addvar("retinal_axon.v(0.5)",3,0.1) //blue
g.addvar("soma.v(0.5)",4,0.1) //green


//addgraph("soma_inter.v(0.5)",-80,40)
//addgraph("dend[32].v(0.5)",-80,40)
//addgraph("retinal_axon.v(0.5)", -80,40)
addgraph("soma.v(0.5)",-80,40)
//addgraph("dend4[0].v(0.5)",-80,40)
addgraph("soma_re.v(0.5)",-80,40)
addgraph("dend_re2[4].v(0.5)",-80,40)
addgraph("dend4[18].v(0.5)",-80,40)
addgraph("dend8[20].v(0.5)",-80,40)


//----------------------------------------------------------------------------
// save data
//----------------------------------------------------------------------------
objref recv, rect, savspike, cortexr
rect = new Vector()
recv = new Vector()
cortexr=new Vector()
rect.record(&t)
recv.record(&soma.v(0.5))//recording from relay cell

objref recvretic, rectretic, savspikeretic, cortexrretic
rectretic = new Vector()
recvretic = new Vector()
cortexrretic=new Vector()
rectretic.record(&t)
recvretic.record(&soma_re.v(0.5))//recording from relay cell

run()
//myrun()

savspike= new File()
savspike.wopen("/Users/jiemei/Desktop/combined_v2/trial_updated/results/result_may24_relay[99]/gaba/csr4/csr4_010.dat")
timestep=0 
timestepi=0
total=0 
totali=0
printf("relay cell")

savspikeretic = new File()
savspikeretic.wopen("/Users/jiemei/Desktop/combined_v2/trial_updated/results/result_may24_relay[99]/gaba/csr4/csr4_011.dat")
timestepretic=0 
timestepiretic=0
totalretic=0 
totaliretic=0
printf("reticular cell")

for i=0 && total=0, rect.size()-1 {
    if (recv.x[i] >= -15 && timestep + 1 < rect.x(i)){
	timestep=rect.x(i)
	total=total+1
	printf("%g\n", total)
	printf("%g\n", timestep)
	savspike.printf("%g\n", timestep)
}
}

for i=0 && totalretic=0, rectretic.size()-1 {
    if (recvretic.x[i] >= -15 && timestepretic + 1 < rectretic.x(i)){
	timestepretic=rectretic.x(i)
	totalretic=totalretic+1
	printf("%g\n", totalretic)
	printf("%g\n", timestepretic)
	savspikeretic.printf("%g\n", timestepretic)
}
}


savspike.close()
savspikeretic.close()
